PsychoPy2experiment version="2021.2.3"
Settings
  Data filename = u'data/%s' % (expInfo['participant'])
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1680, 1050]
  color = #A2C8A2
  colorSpace = hex
  expName = Whispered
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Routines
  Routine intro
    TextComponent introduction
      font = Monaco
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        In this experiment, you will hear some instructions in Mandarin. Please pick out the word that the instruction asks for.  If there is more than one option that you think could be correct, please choose the one that fits the best. Feel free to take your time.

        If you would like to hear the instructions again, press DELETE. Please note that you can only repeat each sentence once.

        Let's start with some practice! Press SPACE to continue.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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    CodeComponent split_into_two_lists
      Code Type = Py
      Begin Experiment:
        import random

        items = len(data.importConditions('sound_stimulis.xlsx')) # get length of the excel sheet (# rows)
        indices = list( range(items) ) # construct a list from [0, # of items)
        random.shuffle(indices) # shuffle indices

        slice = int(len(indices) / 2) # place dividing mark
        session1_indices = indices[:slice]
        session2_indices = indices[slice:]
    ImageComponent welcome_animation
      image = Welcome-In-Green-Background.png
      pos = (0.375, 0.375)
      size = (0.90, 0.25)
      startVal [time (s)] = 0.0
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  Routine la_fin
    TextComponent end
      font = Monaco
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        That's it.

        Thanks for participating!

        Please press SPACE to exit.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine practice_end
    TextComponent start
      font = Monaco
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        If you have any questions, please ask them now.

        Otherwise, please press SPACE to start the experiment when you are ready.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine trial
    SoundComponent sound_1
      hamming = False
      saveStartStop = False
      sound [set every repeat] = $sounds
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.0
      syncScreenRefresh = False
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    KeyboardComponent key_resp
      allowedKeys = '1','2','3','4'
      correctAns = $correct_answer
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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    TextComponent instructions
      font = Monaco
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0
      text = Which word do you think this is? Please press the corresponding number key!
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    TextComponent options
      font = Songti SC
      letterHeight = 0.05
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 2
      text [set every repeat] = $words
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    StaticComponent ISI
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        stimuli = sound.Sound(value=sounds)
        n = 0
      Each Frame:
        repeated = event.getKeys(keyList=['backspace'])

        if 'backspace' in repeated and n < 1:
            stimuli.play()
            n = n + 1
    TextComponent text
      font = Monaco
      letterHeight = 0.03
      pos = (0, -.35)
      startVal [time (s)] = 2
      stopVal [condition] = 'backspace' in repeated
      text = One repeat available (press DELETE)
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    TextComponent text_2
      font = Monaco
      letterHeight = 0.03
      pos = (0, -.35)
      startVal [condition] = 'backspace' in repeated
      text = No repeat available
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  Routine intermission
    TextComponent breaks
      font = Monaco
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You are halfway through the experiment! Please feel free to take a break.

        Whenever you are ready, press SPACE to continue.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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Flow
  Routine intro
  LoopInitiator practices loopType="TrialHandler"
    Selected rows = 0:4
    conditionsFile = sound_stimulis.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'sounds': 'stimuli/DW_S1_e1-p_192ms.wav', 'files': 'DW_S1_e1-p_192ms.wav', 'words': '1-婀          2-鹅          3-恶（恶心）          4-饿', 'correct_answer': 1, 'training': 'Y'},
      {'sounds': 'stimuli/DW_S1_ma3-p_305ms.wav', 'files': 'DW_S1_ma3-p_305ms.wav', 'words': '1-妈          2-麻          3-马           4-骂', 'correct_answer': 3, 'training': 'Y'},
      {'sounds': 'stimuli/SC_S2_wu4-p_305ms.wav', 'files': 'SC_S2_wu4-p_305ms.wav', 'words': '1-乌          2-无          3-五          4-物', 'correct_answer': 4, 'training': 'Y'},
      {'sounds': 'stimuli/SC_S2_yu2-p_192ms.wav', 'files': 'SC_S2_yu2-p_192ms.wav', 'words': '1-迂          2-鱼          3-雨          4-玉', 'correct_answer': 2, 'training': 'Y'},
      {'sounds': 'stimuli/DW_S1_e1-p_305ms.wav', 'files': 'DW_S1_e1-p_305ms.wav', 'words': '1-婀          2-鹅          3-恶（恶心）          4-饿', 'correct_answer': 1, 'training': None},
      {'sounds': 'stimuli/DW_S1_e1-w_192ms.wav', 'files': 'DW_S1_e1-w_192ms.wav', 'words': '1-婀          2-鹅          3-恶（恶心）          4-饿', 'correct_answer': 1, 'training': None},
      {'sounds': 'stimuli/DW_S1_e1-w_305ms.wav', 'files': 'DW_S1_e1-w_305ms.wav', 'words': '1-婀          2-鹅          3-恶（恶心）          4-饿', 'correct_answer': 1, 'training': None},
      {'sounds': 'stimuli/DW_S1_e2-p_192ms.wav', 'files': 'DW_S1_e2-p_192ms.wav', 'words': '1-婀          2-鹅          3-恶（恶心）          4-饿', 'correct_answer': 2, 'training': None}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
    Routine trial
  LoopTerminator practices
  Routine practice_end
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = $session1_indices
    conditionsFile = sound_stimulis.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'sounds': 'stimuli/DW_S1_e1-p_192ms.wav', 'files': 'DW_S1_e1-p_192ms.wav', 'words': '1-婀          2-鹅          3-恶（恶心）          4-饿', 'correct_answer': 1, 'training': 'Y'},
      {'sounds': 'stimuli/DW_S1_ma3-p_305ms.wav', 'files': 'DW_S1_ma3-p_305ms.wav', 'words': '1-妈          2-麻          3-马           4-骂', 'correct_answer': 3, 'training': 'Y'},
      {'sounds': 'stimuli/SC_S2_wu4-p_305ms.wav', 'files': 'SC_S2_wu4-p_305ms.wav', 'words': '1-乌          2-无          3-五          4-物', 'correct_answer': 4, 'training': 'Y'},
      {'sounds': 'stimuli/SC_S2_yu2-p_192ms.wav', 'files': 'SC_S2_yu2-p_192ms.wav', 'words': '1-迂          2-鱼          3-雨          4-玉', 'correct_answer': 2, 'training': 'Y'},
      {'sounds': 'stimuli/DW_S1_e1-p_305ms.wav', 'files': 'DW_S1_e1-p_305ms.wav', 'words': '1-婀          2-鹅          3-恶（恶心）          4-饿', 'correct_answer': 1, 'training': None},
      {'sounds': 'stimuli/DW_S1_e1-w_192ms.wav', 'files': 'DW_S1_e1-w_192ms.wav', 'words': '1-婀          2-鹅          3-恶（恶心）          4-饿', 'correct_answer': 1, 'training': None},
      {'sounds': 'stimuli/DW_S1_e1-w_305ms.wav', 'files': 'DW_S1_e1-w_305ms.wav', 'words': '1-婀          2-鹅          3-恶（恶心）          4-饿', 'correct_answer': 1, 'training': None},
      {'sounds': 'stimuli/DW_S1_e2-p_192ms.wav', 'files': 'DW_S1_e2-p_192ms.wav', 'words': '1-婀          2-鹅          3-恶（恶心）          4-饿', 'correct_answer': 2, 'training': None}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
    Routine trial
  LoopTerminator trials
  Routine intermission
  LoopInitiator trials_2 loopType="TrialHandler"
    Selected rows = $session2_indices
    conditionsFile = sound_stimulis.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine trial
  LoopTerminator trials_2
  Routine la_fin
